PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=7F414AA2
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1, -1, -1]
  expName = NeckerTest
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #import random
        #delay_list = [0.1, 0.2, 0.4, 0.6, 0.8, 1, 1.2]
        start_time = 0.0
        time_counter = initial_count_down
      Begin Routine:
        time_counter = initial_count_down + 1

        #delay = delay_list[delay_index]

        if trials.thisRepN ==1:
            start_time = trialClock.getTime()
      End Routine:
        #thisExp.addData('Fixation', delay)
    TextComponent fix_cross
      color = $text_color
      letterHeight = $1*x_scale
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $delay_list
      text = +
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    TextComponent Fixation
      color = $text_color
      letterHeight = $1*x_scale
      saveStartStop = False
      startVal [time (s)] = $delay_list
      text = +
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    ImageComponent image
      image = Necker_cube.png
      saveStartStop = False
      size [set every repeat] = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = $delay_list
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = $delay_list
      store = all keys
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  Routine Pause
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        time_counter = time_counter - 1
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every frame] = $time_counter
      units = norm
      wrapWidth = 1.5
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  Routine Full_Cube
    CodeComponent condifition_FullCube
      Code Type = Auto->JS
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      Begin Experiment:
        counter_NCloop = 0
      Begin Routine:
        counter_NCloop = counter_NCloop +1
        if int(counter_NCloop) %2 == 0:
            Full_CubSFB.opacity = 1
            Full_CubSFA.opacity = 0
        else:
            Full_CubSFB.opacity = 0
            Full_CubSFA.opacity = 1
      Each Frame:
        if int(counter_NCloop) %2 == 0:
            Full_CubSFB.opacity = 1
            Full_CubSFA.opacity = 0
        else:
            Full_CubSFB.opacity = 0
            Full_CubSFA.opacity = 1
    ImageComponent Full_CubSFB
      image = Necker_cube_Right.png
      saveStartStop = False
      size [set every repeat] = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = 0.0
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    ImageComponent Full_CubSFA
      image = Necker_cube_Left.png
      saveStartStop = False
      size [set every repeat] = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = 0.0
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    TextComponent Fixation2
      color = $text_color
      letterHeight = $1*x_scale
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Parameters
    CodeComponent Variables
      Code Type = Auto->JS
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      Begin Experiment:
        #import math
        background_color = [-1, -1, -1]
        text_color = [1, 1, 1]

        nNeckerLoop = 5 #Nb runs
        nTrials = 10 #Nb essais

        nNecker = nNeckerLoop
        nEval = 1

        initial_count_down = 5
  Routine Remaining_time
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        remaining_time = 30
      Begin Routine:
        remaining_time = remaining_time - 3
        msg = 'Remaining time : ' + str(remaining_time) + ' minutes'
        if remaining_time <3:
            continueRoutine = False
      Each Frame:
        msg = 'Remaining time : ' + str(remaining_time) + ' minutes'
        if remaining_time <3:
            continueRoutine = False
    TextComponent Remaining_time_num
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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    PolygonComponent progressbar_background_NC
      fillColor = $[1,1,1]
      opacity = 0.25
      pos = (0,-300)
      shape = rectangle
      size = (800,20)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = pix
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    PolygonComponent progressbar_NC
      fillColor = $[-0.961,0.608,-0.961]
      lineColor = $[-0.961,0.608,-0.961]
      pos [set every repeat] = positionpbNC
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = sizepbNC
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    CodeComponent progressbarNC
      Code Type = Auto->JS
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      Begin Experiment:
        sizepbNC = [80,20]
        positionpbNC = [-360,-300]
      End Routine:
        sizepbNC[0] = sizepbNC[0]+80
        positionpbNC[0] = positionpbNC[0]+40
  Routine Condition_Selection
    CodeComponent condition
      Code Type = Auto->JS
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      Begin Experiment:
        counter_loop = 0
      Begin Routine:
        counter_loop = counter_loop +1
      End Routine:
        sliderphone.getRating()

        if int(sliderphone.rating) %2 == 0:
            if counter_loop == 1:
                nNecker = nNeckerLoop
                nEval = 0
            else:
                nNecker = 0
                nEval = 1

        else:
            if counter_loop == 1:
                nNecker = 0
                nEval = 1
            else:
                nNecker = nNeckerLoop
                nEval = 0
  Routine Hello
    TextComponent Welcome
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello,

        Welcome to the demo version of the Necker Cube experiment,

        Please press the space bar to continue
    KeyboardComponent begin_expe
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine screen_instructions
    TextComponent adjust_screen_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Good! Now, we need to help you properly adjust your screen
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  Routine Distance
    MovieComponent distancegif
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = distance.mp4
      saveStartStop = False
      size = [500,549]
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent consigne_distance
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good! Now, you need to set the distance between you and the screen,
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    TextComponent continuedistance
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        It should be 60cm / 24inches (The lenght of two A4 sheets of paper).
        Press the spacebar to continue
    KeyboardComponent spacedistance
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Angle
    MovieComponent anglegif
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = angle.mp4
      saveStartStop = False
      size = [500,375]
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent consigne_angle
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good ! Now, please adjust the angle of your screen,
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    TextComponent continueangle
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        It should be perpendicular to the top of your desk or level surface.
        Press the spacebar to continue
    KeyboardComponent spaceangle
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Height
    MovieComponent heightgif
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = screenheight.mp4
      saveStartStop = False
      size = [500,412]
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent consigne_height
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You're doing great ! Just one more step,
        Please, adjust the height of your screen,
    TextComponent continueheight
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The middle of the screen should be aligned at eye level.
        If you have a laptop, you can use books to set this up, be creative !
        Press the spacebar to continue
    KeyboardComponent spaceheight
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Checkout
    TextComponent Check_out
      letterHeight = 0.023
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Are you sure everything is set up correctly ? Just one more thing!
        It's very important that you carry out this experiment in the dark. Make sure you turn off all the lights and close your curtains or blinds to make the room as dark as possible,
    TextComponent Checkout_text
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Once it's done, press the spacebar to launch the experiment !
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    KeyboardComponent begin_part2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent correctdistance
      image = correctdistance.jpg
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent correctangle
      image = correctangle.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent correctheight
      image = correctheight.jpg
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Part2_instructions
    CodeComponent part2_code
      Code Type = Auto->JS
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      Begin Experiment:
        ndorepeat = 10
        ntrialstraining = 9999
        ntrialstraining_2 = 5
        necker_loop_index = 0
        nbegin = 1
      Each Frame:
        if necker_loop_index >=1:
            ndorepeat = 0
            ntrialstraining = 0
            ntrialstraining_2 = 0
            nbegin = 0
            continueRoutine = False
      End Routine:
        necker_loop_index = necker_loop_index + 1
    TextComponent Part_2_instructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now that everything is set-up correctly, we are going to give you the instructions of the task,
        Let's begin !

        Press the spacebar to continue
    KeyboardComponent begin_part2_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instructions_NC
    TextComponent Title_instructions
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $illustration
      saveStartStop = False
      size = (300,300)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent instructions
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructionsNC
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    TextComponent instructions_continue
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 3
      text = Press the spacebar to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine Training
    TextComponent Howdoyou
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How do you perceive the cube right now ?
        Use the arrows left  (←)  and right (→) to answer.
    TextComponent fix_cross_training
      letterHeight = $1*x_scale
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent Training_stim
      image = Necker_cube.png
      saveStartStop = False
      size = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyresp_training
      allowedKeys = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent SFB_train
      image = Necker_cube_Left.png
      pos = (-0.45,0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent SFA_train
      image = Necker_cube_Right.png
      pos = (0.45,0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent rightarrow
      image = rightarrow.png
      pos = (0.45, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent leftarrow
      image = leftarrow.png
      pos = (-0.45, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Check_training
    CodeComponent code_training
      Code Type = Auto->JS
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      Begin Experiment:
        total_acc = 0
      Begin Routine:
        if(keyresp_training.keys == 'right'):
            SFA.opacity = 1
            SFB.opacity = 0
        elif(keyresp_training.keys == 'left'):
            SFA.opacity = 0
            SFB.opacity = 1
      End Routine:
        if keyresp.keys == 'y':
            total_acc = total_acc + 1
        else:
            total_acc = 0

        if total_acc >=3:
            trials_training.finished = True
    TextComponent Didyoumean
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Did you mean you perceived the cube like that ?
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    ImageComponent SFA
      image = Necker_cube_Right.png
      saveStartStop = False
      size = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = 0.0
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    ImageComponent SFB
      image = Necker_cube_Left.png
      saveStartStop = False
      size = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = 0.0
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    TextComponent yesno
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press 'y' for yes, 'n' for no)
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    KeyboardComponent keyresp
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Full_screen
    TextComponent fullscreen
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        WARNING

        Please do not press the Esc key during the experiment, as this will exit full-screen mode, which is essential for the protocol to run smoothly

        If this happens, please return your browser to full-screen mode (F11 on Windows)

        Press the space bar to continue
    KeyboardComponent key_resp_fullscreen
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructionsRepeat
    CodeComponent Resp_Proceed
      Code Type = Auto->JS
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      Begin Experiment:
        ndorepeat = 10
      Each Frame:
        if keySpace.keys == 'y':
            ndorepeat = 0
            dorepeat.finished = True
      End Routine:
        if keySpace.keys == 'y':
            ndorepeat = 0
            dorepeat.finished = True
    TextComponent repeatLoop
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you understood the instructions, press 'y' to proceed to some training trials.

        Otherwise, press Space to see the instructions again.
    KeyboardComponent keySpace
      allowedKeys = 'space','y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine GOOD_BYE
    TextComponent Goodbye_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in our experiment,

        Please wait a minute before you quit the internet page (after you hit Space bar). This will ensure that the data are saved.

        Please click on the Space bar to end the experiment! Goodbye !
    KeyboardComponent end_expe
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Begin_NC
    TextComponent begin_NC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        You did great !
        Let's begin the actual experiment !
  Routine Training_2
    TextComponent Howdoyou_2
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How do you perceive the cube right now ?
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    TextComponent fix_cross_training_2
      letterHeight = $1*x_scale
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent Training_stim_2
      image = Necker_cube.png
      saveStartStop = False
      size = $(8*x_scale, 8*y_scale/1.197)
      startVal [time (s)] = 0.5
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    KeyboardComponent keyresp_training_2
      allowedKeys = 'right','left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    ImageComponent rightarrow_2
      image = rightarrow.png
      pos = (0.45, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    ImageComponent leftarrow_2
      image = leftarrow.png
      pos = (-0.45, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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  Routine Part2_instructionsctrl
    CodeComponent part2_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if necker_loop_index <= nNecker-2:
            continueRoutine = False

        if necker_loop_index == nNecker:
            continueRoutine = False

        sliderphone.getRating()

        if (sliderphone.rating) == 0:
            msgControl = "For this second to last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from above (front face on the right)' perception as much as you can. Press the spacebar to continue !"
        else:
            msgControl = "For this seconde to last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from below (front face on the left)' perception as much as you can. Press the spacebar to continue !"
      Begin Routine:
        if necker_loop_index <= nNecker-2:
            continueRoutine = False

        if necker_loop_index == nNecker:
            continueRoutine = False

        sliderphone.getRating()

        if (sliderphone.rating) == 0:
            msgControl = "For this last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from above (front face on the right)' perception as much as you can. Press the spacebar to continue !"
        else:
            msgControl = "For this last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from below (front face on the left)' perception as much as you can. Press the spacebar to continue !"
    TextComponent Part_2_title
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = IT'S ALMOST THE END!
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    TextComponent Part_2_instructions_firstBloc
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgControl
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    KeyboardComponent begin_part2_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Part2_instructionsctrl_bloc2
    CodeComponent part2_code_3
      Code Type = Auto->JS
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      Begin Routine:
        if necker_loop_index <= nNecker-1:
            continueRoutine = False

        if necker_loop_index == nNecker:
            continueRoutine = False

        sliderphone.getRating()

        if (sliderphone.rating) == 0:
            msgControl2 = "For this last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from below (front face on the left)' perception as much as you can. Press the spacebar to continue !"
        else:
            msgControl2 = "For this last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from above (front face on the right)' perception as much as you can. Press the spacebar to continue !"
      Each Frame:
        if necker_loop_index <= nNecker-1:
            continueRoutine = False

        if necker_loop_index == nNecker:
            continueRoutine = False

        sliderphone.getRating()

        if (sliderphone.rating) == 0:
            msgControl2 = "For this last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from below (front face on the left)' perception as much as you can. Press the spacebar to continue !"
        else:
            msgControl2 = "For this last part, we would like you to perform exactly the same exercise, but, as you do so, we would like you to try to hold the 'seen from above (front face on the right)' perception as much as you can. Press the spacebar to continue !"
    TextComponent Part_2_title_3
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = One last effort!
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    TextComponent Part_2_instructions_secondBloc
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msgControl2
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    KeyboardComponent begin_part2_instructions_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine screen_scale
    CodeComponent code_credit
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = $text_color
      letterHeight = 0.05
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        First, resize this image to match the size of a credit card.
        (Please put the credit card on your screen and try to be the more precise possible).
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      color = $text_color
      letterHeight = 0.05
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine Phone_digit
    TextComponent consignephone
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please indicate the last digit of your phone number.
        (Select your answer by clicking it at the bottom of the screen)
    SliderComponent sliderphone
      forceEndRoutine = True
      granularity = 1
      labels = '0','1','2','3','4','5','6','7','8','9'
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['radio']
      ticks = (0,1, 2, 3, 4, 5, 6, 7, 8,9)
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Flow
  Routine Parameters
  Routine Full_screen
  Routine Hello
  Routine Phone_digit
  Routine screen_instructions
  Routine screen_scale
  Routine Distance
  Routine Angle
  Routine Height
  Routine Checkout
  LoopInitiator Conditions_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine Condition_Selection
    LoopInitiator Necker_Loop loopType="TrialHandler"
      loopType = sequential
      nReps = nNecker
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      Routine Part2_instructions
      LoopInitiator dorepeat loopType="TrialHandler"
        loopType = random
        nReps = ndorepeat
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        LoopInitiator trials_instructions loopType="TrialHandler"
          conditionsFile = Instructions_NC.csv
          loopType = sequential
          nReps = 1
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          conditions:
            [OrderedDict([('instructionsNC', 'This image will be presented to you repeatedly'), ('illustration', 'NC.gif')]),
            OrderedDict([('instructionsNC', 'There are two ways of seeing it'), ('illustration', 'NC.gif')]),
            OrderedDict([('instructionsNC', 'You can interpret it as a cube seen from above\nOr as a cube seen from below'), ('illustration', 'All.gif')]),
            OrderedDict([('instructionsNC', 'The cube will appear and disappear very quickly.'), ('illustration', 'Intermittent.gif')]),
            OrderedDict([('instructionsNC', 'For each appearance of the cube, we will ask you to indicate how you perceive it, at the moment.'), ('illustration', 'All.gif')]),
            OrderedDict([('instructionsNC', 'You will need to answer as fast as possible.'), ('illustration', 'All.gif')]),
            OrderedDict([('instructionsNC', 'Press the right arrow key (>) when you perceive the cube from above.\n(When the front side of the cube appears on the right)\n'), ('illustration', 'SFA.gif')]),
            OrderedDict([('instructionsNC', 'Press the left arrow key (>) when you perceive the cube from below.\n(When the front side of the cube appears on the left)\n'), ('illustration', 'SFB.gif')]),
            OrderedDict([('instructionsNC', 'Just one last thing! Please focus your gaze on the central cross throughout the experiment'), ('illustration', 'NC.gif')])]
          Routine Instructions_NC
        LoopTerminator trials_instructions
        Routine instructionsRepeat
      LoopTerminator dorepeat
      LoopInitiator trials_training loopType="TrialHandler"
        loopType = sequential
        nReps = ntrialstraining
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        Routine Training
        Routine Check_training
      LoopTerminator trials_training
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = sequential
        nReps = ntrialstraining_2
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        Routine Training_2
      LoopTerminator trials_2
      LoopInitiator n_begin loopType="TrialHandler"
        loopType = sequential
        nReps = nbegin
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        Routine Begin_NC
      LoopTerminator n_begin
      Routine Part2_instructionsctrl
      Routine Part2_instructionsctrl_bloc2
      LoopInitiator count_down loopType="TrialHandler"
        loopType = random
        nReps = initial_count_down
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        Routine Pause
      LoopTerminator count_down
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = Delay.csv
        loopType = random
        nReps = nTrials
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        conditions:
          [OrderedDict([('delay_list', 0.1)]),
          OrderedDict([('delay_list', 0.2)]),
          OrderedDict([('delay_list', 0.4)]),
          OrderedDict([('delay_list', 0.6)]),
          OrderedDict([('delay_list', 0.8)]),
          OrderedDict([('delay_list', 1.0)]),
          OrderedDict([('delay_list', 1.2)])]
        Routine trial
      LoopTerminator trials
      Routine Full_Cube
      Routine Remaining_time
    LoopTerminator Necker_Loop
  LoopTerminator Conditions_Loop
  Routine GOOD_BYE
